'+W/O:  CCSG002220
'-Wiring For CR1000-
'
'  HC2S3 (panel switched power)
'    1H:  Brown
'    1L:  White
'    AG:  Yellow
'    G:  Grey
'    G:  Clear
'    SW-12:  Green
'
'  CS300 Pyranometer
'    AG:  Black
'    2H:  Red
'    G:  Clear
'
'  CS655 Water Content Reflectometer (VWC, EC, T, P, PA, AND VR)
'    G:  Black
'    G:  Clear
'    G:  Orange
'    12V:  Red
'    C1:  Green
'
'  WindSonic4 (SDI-12) Two Dimensional Ultrasonic Wind Sensor
'    G:  Clear
'    G:  Black
'    12V:  Red
'    C3:  Green
'
'  ARG100 Rain Gauge (CSL)
'    AG:  Clear
'    P1:  Black
'
'  CS100 Barometric Pressure Sensor
'    2L:  Blue
'    AG:  Yellow
'    G:  Clear
'    G:  Black
'    12V:  Red
'    C2:  Green
'
'  9522B Iridium Satellite Modem and COM9522B Interface Modem
'    G:  Black
'    12V:  Red
'    C5:  Yellow
'
StationName ("WanneTUE")

Const NumberDataTables=2
'Variables for Iridium Configuration

'Require a variable for when a new DataTable file for transmission is created
Public NewTableFile(NumberDataTables) As Boolean

'Require strings for the unique file names associated with the data table files
Public TableFileName(NumberDataTables) As String * 40
Public FileLen(NumberDataTables) As Long
Public HeadLen(NumberDataTables) As Long

'Message Sending Status Variables
Public SerialResponse1 As String * 64
Public SerialResponse2 As String * 64
Public SerialResponse3 As String * 64
Public SerialResponse4 As String * 64
Public SerialResponse5 As String * 64
Public StringBuffer As String * 64
Public CSB1 As Long
Public CSB2 As Long


Public SendFiles As Boolean
Public FileHandle As Long
Public ReadLength, SendFileCntr As Long
Public LineCntr As Long
Const ReadMax = 1960
Public SendTotal, MaxSend As Long
Public ReadString As String * ReadMax

Dim TX_Checksum As Long
Dim byteholder As Long
Dim icnt As Long

Dim DataTableCount As Long
Public HeadCntr, tableIndex As Long
Public TsinceRain  As Long = 100
Public CS655cntr As Long

'Declare Variables and Units
Public BattV
Public PTemp_C
Public AirTC
Public RH
Public PVap
Public SlrW
Public SlrMJ
Public CS655(6)
Public WSData(3)
Public N(8)
Public Rain_mm
'Public R_I_Hr
'Public R_I_C
Public BP_mbar

Alias CS655(1) = VWC
Alias CS655(2) = EC
Alias CS655(3) = GrTemp
Alias CS655(4) = P
Alias CS655(5) = PA
Alias CS655(6) = VR
Alias WSData(1) = WindDir
Alias WSData(2) = WS_ms
Alias WSData(3) = WSDiag
Alias N(1) = SmplsF
Alias N(2) = Diag1F
Alias N(3) = Diag2F
Alias N(4) = Diag4F
Alias N(5) = Diag8F
Alias N(6) = Diag9F
Alias N(7) = Diag10F
Alias N(8) = NNDF

Units BattV=Volts
Units PTemp_C=Deg C
Units AirTC=Deg C
Units RH=%
Units PVap=kPa
Units SlrW=W/m²
Units SlrMJ=MJ/m²
Units Rain_mm=mm
Units BP_mbar=mbar
Units VWC=m³/m³
Units EC=dS/m
Units GrTemp=Deg C
Units P=unitless
Units PA=nSec
Units VR=unitless
Units WindDir=degrees
Units WS_ms=meters/second
Units WSDiag=unitless


'Define Data Tables
DataTable(SendHourly, True, -1)
  DataInterval(0, 60, min, 10)
  TableFile ("USR:SendHourly", 1, 0, 24, 0, 0, NewTableFile(1), TableFileName(1))
  Average(1, AirTC, FP2, False)
  Sample(1, RH, FP2)
  Average(1, SlrW, FP2, False)
  Average(1, VWC, FP2, False)
  Average(1, GrTemp, FP2, False)
  Average(1, WS_ms, FP2, False)
  Maximum(1, WS_ms, FP2, False, False)
  FieldNames("WS_ms_max")
  Average(1, WindDir, FP2, False)
  Totalize(1, Rain_mm, FP2, False)
  Average(1, BP_mbar, FP2, False)
EndTable

DataTable(SendDaily, True, -1)
  DataInterval(0, 1440, min, 10)
  TableFile ("USR:SendDaily", 1, 0, 1, 0, 0, NewTableFile(2), TableFileName(2))
  Minimum(1, BattV, FP2, False, False)
  Sample(1, WSDiag, FP2)
EndTable

DataTable(SaveFull, True, -1)
  DataInterval(0, 30, min, 10)
  CardOut(0, 536870912)
  Average(1, BattV, FP2, False)
  Average(1, PTemp_C, FP2, False)
  Average(1, AirTC, FP2, False)
  Sample(1, RH, FP2)
  Average(1, PVap, FP2, False)
  Average(1, SlrW, FP2, False)
  Totalize(1, SlrMJ, IEEE4, False)
  Average(1, VWC, FP2, False)
  Average(1, GrTemp, FP2, False)
  Average(1, EC, FP2, False)
  Average(1, P, FP2, False)
  Average(1, PA, FP2, False)
  Average(1, VR, FP2, False)
  Average(1, WS_ms, FP2, False)
  Maximum(1, WS_ms, FP2, False, False)
  FieldNames("WS_ms_max")
  Minimum(1, WS_ms, FP2, False, False)
  FieldNames("WS_ms_min"
  Average(1, WindDir, FP2, False)
  WindVector(1, WS_ms, WindDir, FP2, False, 0, 0, 1)
  FieldNames("WS_ms_S_WVT,WindDir_D1_WVT")
  Totalize(1, Rain_mm, FP2, False)
  Average(1, BP_mbar, FP2, False)
EndTable


DataTable(RainHiRes, True, -1)
  DataInterval(0, 5, min, 10)
  DataEvent(1, TsinceRain < 6, TsinceRain > 30, 0)
  CardOut(0, 536870912)
  Totalize(1, Rain_mm, FP2, False)
  Sample(1, VWC, FP2
  Sample(1, GrTemp, FP2)
EndTable

DataTable(SendStat, True, -1)
  Sample(1, ReadLength, Long)
  Sample(1, TX_Checksum, Long)
  Sample(1, SerialResponse1, String)
  Sample(1, SerialResponse2, String)
  Sample(1, SerialResponse3, String)
  Sample(1, SerialResponse4, String)
  Sample(1, SerialResponse5, String)
  Sample(1, StringBuffer, String)
  Sample(1, SendTotal, Long)
EndTable


'String contatenation: Datalogger_cr1000.pdf, page: 282

Sub IridiumTx2
  Timer(1, sec, 2)
  'Maximum according to IRDM_IridiumSBDService_V3_DEVGUIDE_9Mar2012.pdf
  'Page 11: "9522B: 1960 Bytes"
  ReadLength = ReadMax - 2

  'Fill string with "one" bytes
  For icnt = 1 To ReadLength
    ReadString(1, 1, icnt) = CHR(1)
  Next icnt

  'Checksum for "one" bytes:
  'Value: 1960 dec -> 07A8 hex
  '07 -> CHR(07)
  'A8 -> CHR(168)
  'SerialOutBlock(ComRS232, ReadString + CHR(07) + CHR(168), ReadLength + 2)
  'Alternatively:
  'SerialOutBlock(ComRS232, ReadString + CHR(&H07) + CHR(&HA8), ReadLength + 2)

  TX_Checksum = CheckSum(ReadString, 23, ReadLength)
  CSB1 = TX_Checksum AND &B11111111
  CSB2 = (TX_Checksum >> 8)  AND &B11111111
  ReadString(1, 1, ReadLength + 1) = CHR(CSB2)
  ReadString(1, 1, ReadLength + 2) = CHR(CSB1)

  SerialOpen(ComRS232, 19200, 0, 0, 2000)
  SerialOut(ComRS232, "AT+CIER=1,0,1" + CHR(13), "", 1, 10)
  SerialIn(SerialResponse1, ComRS232, 6000, 13, 64)

  StringBuffer = "AT+SBDWB=" + (ReadLength + 2) + CHR(13)
  SerialOut(ComRS232, StringBuffer, "", 1, 10)
  SerialIn(SerialResponse2, ComRS232, 6000, 13, 64)

  SerialResponse2 = SerialResponse2 + ", chk1: " + TX_Checksum + ", CSB1: " + CSB1 + ", CSB2: " + CSB2
  SerialResponse2 = SerialResponse2 + ", ASCII: " + ASCII(ReadString(1, 1, ReadLength + 1)) + ", " + ASCII(ReadString(1, 1, ReadLength + 2))

  SerialOutBlock(ComRS232, ReadString, ReadLength + 2)

  'SerialResponse3 should be 0 if everything went well.
  'Otherwise see error codes in the manual:
  'IRDM_ISU_ATCommandReference.pdf, page 95 / 110
  '0: OK
  '1: Timeout
  '2: Checksum error
  '3: Message size not correct
  SerialIn(SerialResponse3, ComRS232, 6000, 13, 64)
  SerialOut(ComRS232, "AT+SBDI" + CHR(13), "",  1, 10)
  SerialIn(SerialResponse4, ComRS232, 6000, 13, 64)
  SerialOut(ComRS232, "AT+SBDD0" + CHR(13), "", 1, 10)
  SerialIn(SerialResponse5, ComRS232, 6000, 13, 64)
  SerialClose(ComRS232)
EndSub

'Main Program
BeginProg
  'A USR Drive is required for the COM9602 subroutine to store some temporary files.
  SetStatus ("USRDriveSize", 32768)

  'Main Scan
  Scan(1, min, 1, 0)

    'Default Datalogger Battery Voltage measurement 'BattV'
    Battery(BattV)
    'Default Wiring Panel Temperature measurement 'PTemp_C'
    PanelTemp(PTemp_C,_50Hz)

    'HC2S3 (panel switched power) Temperature & Relative Humidity Sensor measurements 'AirTC' and 'RH'
    PortSet (9, 1)
    VoltSe(AirTC, 1, mV2500, 1, 0, 0, _50Hz, 0.1, -40)
    VoltSe(RH, 1, mV2500, 2, 0, 0, _50Hz, 0.1, 0)
    'Trim RH value
    If RH > 100 AND RH < 103 Then RH = 100
    VaporPressure(PVap, AirTC, RH)

    'CS300 Pyranometer measurements 'SlrMJ' and 'SlrW'
    VoltSe(SlrW, 1, mV250, 3, 1, 0, _50Hz, 1.0, 0)
    If SlrW < 0 Then SlrW = 0
    SlrMJ = SlrW * (0.000005 * 60)  'Convert mV to MJ/m² with 60s measurement interval
    SlrW = SlrW * 5.0  'Convert mV to W/m²

    'WindSonic4 Two Dimensional Sonic Wind Speed & Direction Sensor measurements 'WindDir', 'WS_ms', and 'WSDiag'
    'Get data from WindSonic4
    SDI12Recorder(WindDir, 3, "0", "R0!", 1, 0)
    If WindDir = NaN Then
      Move(WS_ms, 2, WindDir, 1)
    EndIf
    'Set diagnostic variables as needed
    Move(SmplsF, 8, 0, 1)

    'ARG100 Tipping Bucket Rain Gauge measurement 'Rain_mm'
    PulseCount(Rain_mm, 1, 1, 2, 0, 0.2, 0)
    If (Rain_mm > 0.19) Then
      TsinceRain = 0
    Else
      TsinceRain = TsinceRain + 1
    EndIf

    'CS100 Barometric Pressure Sensor measurement 'BP_mbar'
    PortSet(2, 1)
    VoltSe(BP_mbar, 1, mV2500, 4, 1, 0, _50Hz, 0.2, 600)
    BP_mbar = BP_mbar * 1

    'Call Data Tables and Store Data
    CallTable SendHourly
    CallTable SendDaily
    CallTable SaveFull
    CallTable RainHiRes

    'Activate Iridium Modems at 12:00 Daily for 15 minutes each time.
    'Allow modem warm-up time & check settings (5 minutes) & data transmissions (10 minutes)
    ' *** Use intervals that are applicable for your application ***

    If TimeIntoInterval (870, 1440, Min) Then
      PortSet (5,1)    ' Turn on modem at 14:30 every 24 hours
    EndIf

    If TimeIntoInterval (890, 1440, Min) Then
      PortSet (5, 0)    ' Turn off modem at 14:50 every 24 hours
      SendFiles = False
    EndIf

    'Allow the modem 3 minutes for warm up before sending files
    If TimeIntoInterval (873, 1440, min) Then
      SendFiles = True
      SendTotal = 0
    EndIf

    If SendFiles Then
      For tableIndex = 1 To NumberDataTables Step 1
        FileHandle = FileOpen(TableFileName(tableIndex), "rb", 0)

        Do
          ReadLength = FileRead(FileHandle, ReadString, ReadMax - 2)
          SendTotal = SendTotal + 1
        Loop While ReadLength > 0

        FileClose(FileHandle)

        Call(IridiumTx2)
        CallTable SendStat
      Next tableIndex
      SendFiles = False
      PortSet (5, 0)
    EndIf

  NextScan

  SlowSequence
  'Ground Measurements every 15 or 30 Minutes
  Scan(15, min, 0, 0)
    'Conunter to do CS655 measurement only every 30 Minutes unless RainHiRes is saved, then every 15 Min
    If (TsinceRain <= 30) Then
      CS655cntr = 0
    Else
      CS655cntr = CS655cntr - 1
    EndIf

    If (CS655cntr < 1) Then
      'CS655 Water Content Reflectometer measurements 'VWC', 'EC', and 'Temp'
      SDI12Recorder(CS655(), 1, "0", "M3!", 1, 0)
      'Resest Counter
      CS655cntr = 2
    EndIf

  NextScan
  EndSequence

EndProg
